PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/%s_%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = white
  expName = leap3
  keyboardBackend = ioHub
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Routines
  Routine LDT
    CodeComponent pressQcode
      Code Type = Auto->JS
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      End Routine:
        if LDTResp.keys == 'q' and this_role == 'target':
            thisExp.addData('pressedQ', 1)
            blockPM = 1
        elif LDTResp.keys == 'q' and this_role == 'aftertar1':
            thisExp.addData('pressedQ_late', 1)
            blockPM = 1
        elif LDTResp.keys == 'q' and this_role == 'aftertar2':
            thisExp.addData('pressedQ_late', 1)
        elif LDTResp.keys == 'q' and this_role == 'aftertar3':
            thisExp.addData('pressedQ_late', 1)
    TextComponent LDTWord
      color = black
      letterHeight = 0.075
      pos [set every repeat] = loc
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $this_stim
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    KeyboardComponent LDTResp
      allowedKeys = 'g','h','q'
      correctAns = $this_correctKey
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine init
    CodeComponent setup
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import math

        # define random function
        def randomizer(x,seed=None):
          random.seed(seed)
          for i in reversed(range(1,len(x))):
            j = math.floor(random.random() * (i +1))
            x[i], x[j] = x[j], x[i]
          return(x)

        # defining variables
        ntrials = 30 # number of trials per block
        subNum = int(expInfo['participant'])
        nBlocks = 40
        nTargets = 20
        if subNum %2 == 0:
            hDemandLoc = 'upper'
            lDemandLoc = 'lower'
        else:
            hDemandLoc = 'lower'
            lDemandLoc = 'upper'

        # Set up practice blocks
        nPracBlock = 2
        nPracTrials = 14
        pracWords = ['umpire','tricycle','slumber','grimace','unscrew','summary','sponsor','overshoot','reputable','infinity','revival','picture','busted','hiring']
        pracNonwords = ['alolition', 'julled','lumbigo','lurshing','raestro','hasking','latador','treeps','crinklo','grocus','trotch','grutch','turative','curlecs']
        pracWords = randomizer(pracWords)
        pracNonwords = randomizer(pracNonwords)

        pracStim= []
        pracWordType = []
        pracCorrKey = []
        for b in list(range(0,nPracBlock)):
            pS = pracWords[(b*int(nPracTrials/2)):((b+1)*int(nPracTrials/2))] + pracNonwords[(b*int(nPracTrials/2)):((b+1)*int(nPracTrials/2))]
            pWT = ['w']*int(nPracTrials/2) + ['nw']*int(nPracTrials/2)
            pCK = ['g']*int(nPracTrials/2) + ['h']*int(nPracTrials/2)
            pS= randomizer(pS, seed = subNum)
            pWT = randomizer(pWT, seed = subNum)
            pCK = randomizer(pCK, seed = subNum)
            pracStim.append(pS)
            pracWordType.append(pWT)
            pracCorrKey.append(pCK)

        # set word lists
        words = ['supplier', 'govern', 'deceit', 'scatter', 'forgery', 'abhorrent', 'cookbook', 'protest', 'colored', 'pressures', 'pollute', 'rational', 'army', 'punctual', 'strenuous', 'dreaded', 'angry', 'destroy', 'senior', 'pillage', 'handcuff', 'inducing', 'rewrite', 'icepick', 'female', 'infusion', 'sunshine', 'turning', 'combat', 'lawsuit', 'triangle', 'suburb', 'catacomb', 'maiden', 'comply', 'divider', 'ignore', 'nostril', 'regional', 'threaded', 'orange', 'deadly', 'solidity', 'dominion', 'castaway', 'oppose', 'alchemist', 'showdown', 'treason', 'intrude', 'perishing', 'demise', 'previous', 'uncounted', 'footstep', 'tablet', 'eyesight', 'latter', 'permeable', 'butler', 'aqueduct', 'vaporize', 'digest', 'foster', 'image', 'crazy', 'virulent', 'recollect', 'forbid', 'reason', 'nature', 'hustle', 'teamwork', 'caloric', 'violate', 'emergence', 'collision', 'buzzer', 'swatches', 'heaviest', 'admire', 'century', 'legalize', 'unspoken', 'regards', 'armada', 'command', 'companion', 'organize', 'engineer', 'forecast', 'condensed', 'throttle', 'blueberry', 'fetching', 'vented', 'brighten', 'attract', 'frequency', 'publish', 'party', 'euphoric', 'deficit', 'module', 'awful', 'ignoble', 'standard', 'garment', 'populace', 'achieve', 'remover', 'warmer', 'criminal', 'talent', 'ahead', 'bloodless', 'amaze', 'checkout', 'lentils', 'burrowing', 'probable', 'fillings', 'describe', 'unbridled', 'earnest', 'servant', 'gallon', 'record', 'burning', 'culinary', 'manage', 'regiment', 'mopping', 'unmarked', 'penalize', 'lifetime', 'prison', 'pretzel', 'practice', 'reconcile', 'moral', 'tycoon', 'envelop', 'stable', 'outflow', 'cervical', 'disease', 'expensive', 'plunging', 'afford', 'failure', 'slogan', 'inversion', 'uncorked', 'design', 'realize', 'rivet', 'fictional', 'defeat', 'coverall', 'column', 'painter', 'glassware', 'entropy', 'located', 'season', 'flicking', 'pressing', 'outrank', 'bedding', 'encounter', 'rawhide', 'mitten', 'roughly', 'childhood', 'outset', 'remade', 'hangar', 'rejoiced', 'explosion', 'skiing', 'insertion', 'patio', 'committed', 'acorn', 'finish', 'railroad', 'region', 'usage', 'entitle', 'delegate', 'postal', 'artifact', 'fidelity', 'epic', 'micron', 'sliding', 'couple', 'pepperoni', 'remain', 'advantage', 'potter', 'tipoff', 'affluent', 'exclusion', 'removable', 'derived', 'befriend', 'aligning', 'parent', 'jiggling', 'visible', 'rodeo', 'renown', 'elderly', 'expounded', 'usually', 'audience', 'attended', 'retain', 'loneliest', 'railway', 'assent', 'casino', 'decant', 'incorrect', 'enabled', 'implode', 'marinate', 'bullet', 'correct', 'stagger', 'forfeit', 'medium', 'landing', 'equitable', 'ergonomic', 'monopoly', 'unlined', 'ensues', 'happen', 'antique', 'cutout', 'meteoroid', 'issue', 'resonant', 'efficient', 'fragment', 'student', 'splatter', 'entertain', 'stalemate', 'measure', 'midday', 'kickoff', 'fission', 'hatred', 'reborn', 'primal', 'country', 'dishwater', 'mandate', 'create', 'knowledge', 'thesis', 'calcify', 'insole', 'sequence', 'holdup', 'pester', 'sequence', 'permute', 'oppose', 'contain', 'relaying', 'seldom', 'scarlet', 'vibrate', 'moisture', 'decency', 'turntable', 'dabble', 'giving', 'recount', 'managed', 'exploit', 'tragedy', 'enunciate', 'jungle', 'venturous', 'aviation', 'rudder', 'paying', 'resume', 'outfit', 'arrive', 'analysis', 'maximized', 'hardest', 'machinery', 'grieving', 'humanize', 'wrestle', 'larger', 'retreat', 'figure', 'massacre', 'cherry', 'disperse', 'dentures', 'urgent', 'laser', 'owner', 'ascending', 'cavern', 'repayment', 'irregular', 'innocent', 'vinegar', 'trembles', 'cessation', 'even', 'argue', 'minimum', 'potent', 'curricula', 'listless', 'rationale', 'upstairs', 'dealer', 'arrival', 'handed', 'helpful', 'phonology', 'guitar', 'infancy', 'picnic', 'volition', 'fallacy', 'stranded', 'alarm', 'terrify', 'obtuse', 'index', 'consonant', 'system', 'rainfall', 'blocking', 'dialect', 'whirlpool', 'summon', 'curtail', 'actual', 'prohibit', 'baseline', 'telecast', 'glamorous', 'unversed', 'except', 'martial', 'series', 'surfaced', 'undertake', 'mixture', 'inverted', 'agony', 'statute', 'sonnet', 'suspect', 'observer', 'number', 'intersect', 'emotion', 'asthmatic', 'lofty', 'filter', 'perform', 'omission', 'bypassed', 'arbitrary', 'preserve', 'overwork', 'movie', 'vivid', 'robbery', 'charcoal', 'company', 'suddenly', 'urgency', 'ulcer', 'gymnasium', 'potatoes', 'actively', 'expired', 'antonym', 'minister', 'terming', 'miracle', 'abstain', 'computer', 'nameplate', 'tinker', 'other', 'intended', 'bookend', 'staircase', 'saturate', 'overflow', 'kettle', 'encrusted', 'official', 'handle', 'walnut', 'obviously', 'digested', 'uncle', 'ordinary', 'butcher', 'levels', 'dialogues', 'rearrange', 'presently', 'matter', 'paranoid', 'itself', 'emission', 'require', 'satisfies', 'enacted', 'spaceship', 'warden', 'hangar', 'harmful', 'formation', 'standard', 'absent', 'inside', 'mystery', 'extend', 'mortgage', 'compose', 'volume', 'slightly', 'seeming', 'anterior', 'static', 'gaining', 'stooping', 'booster', 'saucer', 'classify', 'single', 'shivering', 'stretches', 'partner', 'arrested', 'release', 'surround', 'desert', 'marvel', 'anonymous', 'exemplify', 'cabinet', 'addition', 'amplifier', 'result', 'truthful', 'bother', 'anemic', 'professor', 'whirling', 'stifle', 'acoustic', 'embrace', 'twenties', 'coupling', 'trooper', 'sputter', 'buttress', 'reprint', 'deeper', 'maintain', 'duplex', 'colicky', 'purport', 'distrust', 'arrow', 'optional', 'shamrock', 'sustain', 'subpoena', 'handbook', 'target', 'personify', 'category', 'triplet', 'parody', 'preclude', 'living', 'diatonic', 'courier', 'reforest', 'boutique', 'despise', 'ready', 'afternoon', 'sullen', 'rocket', 'expected', 'forgive', 'illness', 'widely', 'exit', 'bickering', 'disuse', 'trophy', 'serving', 'gazes', 'religious', 'mullet', 'border', 'extruded', 'brother', 'prominent', 'seasoning', 'melodic', 'budget', 'resent', 'become', 'sweeping', 'demon', 'daylight', 'cassette', 'caution', 'causality', 'boulder', 'shockwave', 'function', 'leather', 'restock', 'arranged', 'cobalt', 'rarely', 'amidst', 'graveyard', 'calming', 'bamboo', 'purpose', 'corduroy', 'revising', 'define', 'airline', 'noblest', 'chemical', 'dehydrate', 'educate', 'binder', 'presence', 'deserve', 'harder', 'confined', 'comment', 'sampling', 'planar', 'undue', 'pocket', 'overcoat', 'hotplate', 'mounting', 'acidic', 'apology', 'maroon', 'rapport', 'pariah', 'intercede', 'halter', 'oldest', 'axis', 'ethical', 'accessory', 'submit', 'goblet', 'tucker', 'hindsight', 'acting', 'carnival', 'surface', 'typical', 'contact', 'tracing', 'fracture', 'mining', 'infested', 'posing', 'hubris', 'airmen', 'provide', 'superstar', 'integral', 'persona']
        words = randomizer(words, seed = subNum)
        nonwords = ['cogantly', 'chight', 'doads', 'nimp', 'downtrund', 'alomalous', 'rootsie', 'omners', 'coster', 'cripet', 'tyena', 'arrigns', 'ireology', 'rumblos', 'apticle', 'lutton', 'glaims', 'nelvet', 'etber', 'havel', 'thamp', 'deakers', 'smolvers', 'bumbo', 'drine', 'wienegs', 'imprives', 'brongs', 'congraks', 'pypecast', 'glates', 'browting', 'ezulated', 'trises', 'borrent', 'fudden', 'corg', 'poyride', 'soluced', 'decantel', 'slears', 'eightiech', 'chiffol', 'neuran', 'carony', 'joadbed', 'veirs', 'tharcely', 'nollow', 'mabit', 'neliefs', 'pegend', 'ringlat', 'bropic', 'glattery', 'harfing', 'bamps', 'houted', 'pexts', 'quickel', 'buaint', 'volder', 'hinsome', 'gelfry', 'culer', 'miability', 'dorte', 'alticles', 'smallash', 'zears', 'lenie', 'flougy', 'uncarled', 'donastic', 'brouhuha', 'asclibed', 'shillac', 'duries', 'greft', 'aicline', 'fabstand', 'sheerio', 'nimono', 'antwers', 'ounside', 'germeated', 'contund', 'misobeyed', 'derisury', 'tunneg', 'geborn', 'breiled', 'geissue', 'lecked', 'gumdrep', 'sprea', 'clume', 'puggers', 'rualify', 'erithets', 'fraft', 'mogus', 'fuack', 'withep', 'preight', 'nearsipe', 'senalize', 'ganter', 'mebase', 'cooray', 'rasuals', 'gerby', 'dricked', 'bentler', 'lonnote', 'scrooner', 'doxing', 'spiud', 'neally', 'ufionize', 'digar', 'irfirm', 'mosary', 'elvisages', 'stuggard', 'fashing', 'serfume', 'fallint', 'ements', 'miurnal', 'hutting', 'rarren', 'crimb', 'slending', 'drauns', 'ludictous', 'pastnoss', 'tenpince', 'huests', 'efcorted', 'gensions', 'arcients', 'gestalion', 'seighing', 'aefated', 'chonemic', 'sazer', 'lightels', 'seartfelt', 'gablus', 'detrabe', 'gures', 'endgume', 'prillway', 'temelity', 'padicals', 'talate', 'gackpedal', 'shests', 'halms', 'walsams', 'scrib', 'yearnungs', 'porghum', 'gelented', 'refebs', 'numbled', 'dingly', 'bailmenz', 'phraining', 'iflaid', 'thaken', 'treenery', 'finstrel', 'pircus', 'frose', 'plapping', 'pranny', 'rangel', 'crundle', 'puyer', 'gontracts', 'collute', 'peems', 'gaioty', 'pallir', 'sording', 'funtair', 'plymie', 'brials', 'abraid', 'lasprey', 'golemic', 'setwixt', 'hasks', 'drobate', 'dileting', 'huzzles', 'hackal', 'olgies', 'ralliep', 'welayed', 'trocess', 'poars', 'profats', 'sarlock', 'ifling', 'spigat', 'snocks', 'troven', 'yash', 'kiner', 'yellep', 'theery', 'nomma', 'flooted', 'brimitar', 'draze', 'clattest', 'dazid', 'glocked', 'sludding', 'pimorous', 'reddar', 'sporidic', 'fards', 'ragtam', 'grolific', 'beartiset', 'begut', 'bengths', 'sponto', 'pripend', 'ifkling', 'prama', 'nogwhell', 'plartly', 'hostade', 'elormity', 'goltish', 'wimpid', 'cegalia', 'newstrint', 'acroad', 'frunted', 'worps', 'egect', 'itfidels', 'runabouk', 'addma', 'misest', 'aggepting', 'noils', 'gepealed', 'latirizes', 'trembla', 'prame', 'ucility', 'frader', 'praiged', 'tinion', 'trake', 'blerapies', 'imotope', 'opert', 'carbled', 'peadgear', 'plashed', 'tredits', 'geadpan', 'cemoir', 'guffy', 'labitable', 'slooping', 'brimitive', 'ounwit', 'hecture', 'attrove', 'hemoter', 'moyeur', 'snife', 'teliever', 'pamine', 'vopings', 'lancos', 'pleamed', 'adok', 'baults', 'bluads', 'ronic', 'razelle', 'airbis', 'maunches', 'egcused', 'ephically', 'mandlers', 'dounger', 'noblin', 'rowel', 'defensa', 'pracking', 'unamufed', 'befin', 'oleandur', 'squadroim', 'gradielts', 'grenavier', 'recipus', 'legalosm', 'ghists', 'brudent', 'sonkers', 'elalt', 'trecious', 'batire', 'hodels', 'tibs', 'sefraud', 'fuestion', 'blanned', 'birn', 'subber', 'tritical', 'slutches', 'crudios', 'natch', 'roodies', 'ilcurring', 'mustled', 'sefine', 'quittint', 'gairs', 'gounts', 'markot', 'wrecber', 'reses', 'gewer', 'dests', 'butled', 'halents', 'rebool', 'etuip', 'oalis', 'hanling', 'ugifies', 'filny', 'eugenifs', 'bellicove', 'mantos', 'horks', 'daining', 'ronvince', 'snays', 'eaglot', 'unstatle', 'gettle', 'guivers', 'togglo', 'fuintets', 'ilterfere', 'amkles', 'fivalve', 'fuhrek', 'gremieres', 'farochial', 'thrapping', 'cartles', 'ebciting', 'fomrade', 'kraums', 'offonents', 'metebing', 'amms', 'grefab', 'otoist', 'valif', 'outlaved', 'athcan', 'ebuating', 'slimped', 'tiery', 'parlayid', 'lignpost', 'portify', 'graciap', 'bureaug', 'latpin', 'gigglod', 'currowing', 'vergas', 'pived', 'sodent', 'vorm', 'twarfs', 'epthuse', 'shimble', 'ecistle', 'heuls', 'glating', 'fomes', 'moozy', 'snorls', 'apop', 'chraps', 'sunhess', 'brank', 'mitro', 'atabaster', 'gund', 'gonesty', 'schides', 'chone', 'fassed', 'unwose', 'ipiocy', 'unburnid', 'flieves', 'miteous', 'cayward', 'favoting', 'theles', 'riosk', 'dusmy', 'rantho', 'loached', 'grested', 'galashes', 'splum', 'sopes', 'inforl', 'prawls', 'stelled', 'tasher', 'smabled', 'peags', 'oginous', 'rander', 'graiking', 'lanthers', 'jinds', 'gunrunker', 'shurk', 'urique', 'clypaper', 'esdings', 'dontrite', 'ebince', 'elpired', 'eggays', 'clarms', 'fullity', 'huffle', 'slooch', 'vintnel', 'blipover', 'churnad', 'pakened', 'fonducts', 'bingu', 'lavilion', 'fravity', 'unrealon', 'joses', 'tusied', 'mennel', 'rillains', 'chesume', 'susher', 'ameld', 'veranpah', 'haurded', 'atble', 'felevance', 'kilotin', 'chrik', 'greakable', 'frigs', 'tining', 'dorth', 'frogmy', 'selongs', 'ottans', 'splinging', 'ubefully', 'tapling', 'olerates', 'phambled', 'pregs', 'surdens', 'plogging', 'sength', 'impirt', 'unsmilung', 'dariner', 'pender', 'topefuls', 'egpended', 'hivinity', 'redefloy', 'catgup', 'blassed', 'rascaps', 'podges', 'clooped', 'gigoho', 'lindo', 'edasion', 'sorping', 'podes', 'cheathe', 'chining', 'bulmed', 'erlighten', 'mubby', 'menarthe', 'incidonts', 'mestowal', 'chappef', 'odacles', 'thacked', 'dislokes', 'earmaff', 'ofsters', 'lovud', 'scabry', 'paterways', 'shazer', 'contusiok', 'earterner', 'trewl', 'beggarlan', 'tuckel', 'godomy', 'poughest', 'traze', 'balign', 'ausht', 'nopping', 'naxis', 'racile', 'undimmec', 'facienda', 'bloves', 'ciping', 'dredigest', 'etcess', 'priant', 'roaned', 'sooled', 'peanimate', 'appain', 'alber', 'flacked', 'elpousal', 'louches', 'trallion', 'chyme', 'atch', 'nores', 'fisco', 'elbalm', 'scack', 'metrol', 'peahem', 'otiates', 'pammed', 'nauling', 'mamps', 'chrayed', 'thorifies', 'scrobby', 'baladroit', 'grummer', 'leuter', 'mineluyer', 'pigned', 'hegacy', 'retona', 'migmarole', 'capobly', 'reloant', 'slowning', 'fatho', 'dumult', 'huntry', 'sengry', 'cills', 'iolize', 'bettled', 'passet', 'allained', 'glapula', 'schinter', 'arpired', 'igiom', 'atsless', 'planofoad', 'frowsed', 'erony', 'veclors']
        nonwords = randomizer(nonwords, seed = subNum)
        targets = ['giraffe','monkey','chicken','elephant','butterfly','flamingo','dolphin','spider','octopus','ladybug','crocodile','kangaroo','rabbit','porcupine','gorilla','jaguar','coyote','caterpillar','lizard','squirrel']

        tarWordType = ['w']*int(len(targets))
        targets = randomizer(targets, seed = subNum)
        # 1 = high demand, target
        # 2 = high demand, no target
        # 3 = low demand, no target
        # 4 = low demand, target
        blockOrder = []
        for n in [1,2,3,4]:
          random_order = randomizer([1,1,1,1,2,3,3,3,3,4], seed = subNum)
          blockOrder = blockOrder + random_order

        # Randmoize stimuli and conditions
        block = []
        stim = []
        blockType = []
        role = []
        wordType = []
        correctKey = []
        stimLocation = []
        blockDesc = []
        for i in list(range(0,nBlocks)):
          block.append([i] * ntrials)
          seed = subNum*(i+1)
          b = blockOrder[i]
          targetTrial = random.randint(9,29)
          this_stim = words[i*int(ntrials/2):(i+1)*int(ntrials/2)] + nonwords[i*int(ntrials/2):(i+1)*int(ntrials/2)]
          this_role = ['w']*int(ntrials/2) + ['nw'] * int(ntrials/2)
          this_wordType = ['w']*int(ntrials/2) + ['nw'] * int(ntrials/2)
          this_correctKey = ['g'] * int(ntrials/2) + ['h'] * int(ntrials/2)
          this_stim = randomizer(this_stim, seed = seed)
          this_role = randomizer(this_role, seed = seed)
          this_wordType = randomizer(this_wordType, seed = seed)
          this_correctKey = randomizer(this_correctKey, seed = seed)
          if b == 1:
            this_blockDesc = ['HiDemTar']*ntrials
            this_stimLocation = [hDemandLoc] * ntrials
            this_stim[targetTrial] = targets[0]
            this_role[targetTrial:targetTrial+3] = ['target','aftertar1','aftertar2','aftertar3']
            this_wordType[targetTrial] = 'target'
            this_correctKey[targetTrial] = 'q'
            targets = targets[1:len(targets)]
          if b == 2:
            this_blockDesc = ['HiDemNoTar'] * ntrials
            this_stimLocation = [hDemandLoc] * ntrials
          if b == 3:
            this_blockDesc = ['LoDemNoTar'] * ntrials
            this_stimLocation = [lDemandLoc] * ntrials
          if b == 4:
            this_blockDesc = ['LoDemTar'] * ntrials
            this_stimLocation = [lDemandLoc] * ntrials
            this_stim[targetTrial] = targets[0]
            this_role[targetTrial:targetTrial+3] = ['target','aftertar1','aftertar2','aftertar3']
            this_wordType[targetTrial] = 'target'
            this_correctKey[targetTrial] = 'q'
            targets = targets[1:len(targets)]

          blockType.append([b] * ntrials)
          blockDesc.append(this_blockDesc)
          stim.append(this_stim)
          role.append(this_role)
          wordType.append(this_wordType)
          correctKey.append(this_correctKey)
          stimLocation.append(this_stimLocation)
  Routine block_break
    CodeComponent breakCode
      Code Type = Auto->JS
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      Begin Routine:
        if (int(LDT_block.thisN) + 1) == nBlocks:
            continueRoutine = False
        else:
            continueRoutine = True
    TextComponent break_screen
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      wrapWidth = 1.2
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      text:
        Break!

        The next segment will begin in 5 seconds.
  Routine block_init
    CodeComponent block_setup
      Code Type = Auto->JS
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      Begin Routine:
        blockPM = 0
        block_stim = stim[LDT_block.thisN]
        block_blockType = blockType[LDT_block.thisN]
        block_role = role[LDT_block.thisN]
        block_wordType = wordType[LDT_block.thisN]
        block_correctKey = correctKey[LDT_block.thisN]
        block_stimLocation = stimLocation[LDT_block.thisN]
        block_blockDesc = blockDesc[LDT_block.thisN]
  Routine welcome
    TextComponent welcomeText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Welcome to the experiment!


        When you are ready to begin, press ENTER.
    KeyboardComponent welcomeKey
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LDTInst1
    TextComponent LDTInst1Text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Great, now you will continue to the task.

        In this study, we are investigating the speed with which certain words and syllables are processed. Your task is to indicate whether or not a string of letters forms a real word.

        When you encounter a real word, press "g". When you encounter a string of letters that is not a real word, press "h".


        Press "g" to continue with the instrucitons.
    KeyboardComponent LDTInst1Key
      allowedKeys = 'g'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LDTInst2
    TextComponent LDTInst2Text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        This is called the SPEED task because the goal is to respond as quickly as possible. Therefore, you should try to respond as soon as you can without sacrificing accuracy. Your goal should be to respond in less than one second. The strings of letters are presented in random order, so do not try to predict the upcoming string of letters; that will only slow you down.


        Press ENTER to proceed.
    KeyboardComponent LDTInst2Key
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LDTInst3
    TextComponent LDTInst3Text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        The SPEED task will be broken down into segments. During each segment, you will complete a series of SPEED trials before receiving a short break. In some segments, the strings of letters will appear in the upper part of the screen. In other segments, the strings of letters will appear in the lower part of the screen. A "+"  will appear on the screen before the string of letters appears. This is your fixation point, which indicates where the string of letters will appear. After your response is made, you will be given a very brief break before the next fixation point appears.

        Press SPACE to proceed.
    KeyboardComponent LDTInst3Key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blank500
    CodeComponent pressQcodeblank
      Code Type = Auto->JS
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      End Routine:
        if blankQResp.keys == 'q' and this_role == 'target':
            thisExp.addData('pressedQ', 1)
            thisExp.addData('pressedQ_blank', 1)
            blockPM = 1
        elif blankQResp.keys == 'q' and this_role == 'aftertar1':
            thisExp.addData('pressedQ_late', 1)
            blockPM = 1
        elif blankQResp.keys == 'q' and this_role == 'aftertar2':
            thisExp.addData('pressedQ_late', 1)
        elif blankQResp.keys == 'q' and this_role == 'aftertar3':
            thisExp.addData('pressedQ_late', 1)
    PolygonComponent blank
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent blankQResp
      allowedKeys = 'q'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      store = nothing
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  Routine pracFeedback
    CodeComponent pracFeedbackCode
      Code Type = Auto->JS
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      Begin Routine:
        nCorr += LDTpracKey.corr
        running_average = nCorr/(pracTrial.thisN + 1)

        if LDTpracKey.corr == 1:
            feedback = 'Correct!\n\n' + str(round(LDTpracKey.rt,2)) + ' Seconds Response Time\n\n' + str(round((running_average*100),1)) + '% Average Percent Correct'
            font_color = 'blue'
        else:
            feedback = 'Incorrect\n\n' + str(round(LDTpracKey.rt,2)) + ' Seconds Response Time\n\n' + str(round((running_average*100),1)) + '% Average Percent Correct'
            font_color = 'red'
    TextComponent LDTpracFeedback
      color [set every repeat] = $font_color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback
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  Routine LDTprac
    TextComponent LDTpracWord
      color = black
      letterHeight = 0.075
      pos [set every repeat] = pStimLoc
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $pStim
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    KeyboardComponent LDTpracKey
      allowedKeys = 'g','h'
      correctAns = $pCorrKey
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine trial_init
    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        this_stim = block_stim[LDT_trial.thisN]
        this_blockType = block_blockType[LDT_trial.thisN]
        this_role = block_role[LDT_trial.thisN]
        this_wordType = block_wordType[LDT_trial.thisN]
        this_correctKey = block_correctKey[LDT_trial.thisN]
        this_stimLocation = block_stimLocation[LDT_trial.thisN]
        this_blockDesc = block_blockDesc[LDT_trial.thisN]
        if this_stimLocation == 'upper':
            loc = [0,0.25]
        elif this_stimLocation == 'lower':
            loc = [0,-0.25]

        thisExp.addData('stim', this_stim)
        thisExp.addData('block_type', this_blockType)
        thisExp.addData('role', this_role)
        thisExp.addData('word_type', this_wordType)
        thisExp.addData('corr_key', this_correctKey)
        thisExp.addData('stim_location', this_stimLocation)
        thisExp.addData('block_desc', this_blockDesc)
  Routine demoAge
    TextComponent ageText
      color = black
      letterHeight = 0.05
      pos = (0, .15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How old are you? Please type your answer.
      wrapWidth = 1.2
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    TextboxComponent ageTextbox
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent ageNextText
      color = black
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to submit response.
      wrapWidth = 1.2
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    KeyboardComponent ageNextKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine demoGender
    TextComponent genderText
      color = black
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What is your gender? Please type your answer. Leave blank if you prefer not to answer.
      wrapWidth = 1.2
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    TextboxComponent genderTextbox
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent genderNextText
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to submit your response.
      wrapWidth = 1.2
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    KeyboardComponent genderNextKey
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine demoEducation
    CodeComponent eduCode
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("education", education.keys.replace('num_', ''))
    TextComponent eduText
      color = black
      font = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Select the option that best describes your formal education level.

        1. Less than a high school degree
        2. High school degree
        3. Some college
        4. Bachelor's degree
        5. Master's degree
        6. Doctoral degree
        7. Prefer not to say
    KeyboardComponent education
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine demoHealth
    CodeComponent healthCode
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("health", health.keys.replace('num_', ''))
    TextComponent healthText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        How would you rate your health at the moment?

        1. Poor
        2. Fair
        3. O.K.
        4. Good
        5. Excellent
        6. Prefer not to say
    KeyboardComponent health
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine demoMedication
    TextComponent medText
      color = black
      letterHeight = 0.05
      pos = (0, 0.175)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How many prescription drugs are you currently taking that may affect your memory? Please type your answer. If none, type 0. If you prefer not to answer, leave blank
      wrapWidth = 1.2
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    TextboxComponent medTextbox
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent medNextText
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to submit your response.
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    KeyboardComponent medNextKey
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine demoHealthLimit
    CodeComponent healthLimitCode
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("healthLimit", healthLimit.keys.replace('num_', ''))
    TextComponent healthLimitText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        How much do health problems limit your daily activities?

        1. A lot
        2. Some
        3. A little
        4. None
        5. Prefer not to say
    KeyboardComponent healthLimit
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine demoRace2
    CodeComponent aCode
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("asian", a.keys)
    TextComponent aText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Are you Asian?

        If yes, press 'y'.
        If no, press 'n'.

        Press 'x' if you prefer not to answer.
    KeyboardComponent a
      allowedKeys = 'y','n','x'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine demoRace1
    CodeComponent aaCode
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("americanIndian", aa.keys)
    TextComponent aaText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Are you American Indian or Alaska Native?

        If yes, press 'y'.
        If no, press 'n'.

        Press 'x' if you prefer not to answer.
    KeyboardComponent aa
      allowedKeys = 'y','n','x'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine demoRace3
    CodeComponent baaCode
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("black", baa.keys)
    TextComponent baaText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Are you Black or African American?

        If yes, press 'y'.
        If no, press 'n'.

        Press 'x' if you prefer not to answer.
    KeyboardComponent baa
      allowedKeys = 'y','n','x'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine demoRace4
    CodeComponent nhCode
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("hawaiian", nh.keys)
    TextComponent nhText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Are you Native Hawaiian or other Pacific Islander?

        If yes, press 'y'.
        If no, press 'n'.

        Press 'x' if you prefer not to answer.
    KeyboardComponent nh
      allowedKeys = 'y','n','x'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine demoRace5
    CodeComponent wCode
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("white", w.keys)
    TextComponent wText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Are you White?

        If yes, press 'y'.
        If no, press 'n'.

        Press 'x' if you prefer not to answer.
    KeyboardComponent w
      allowedKeys = 'y','n','x'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LDTbegin1
    TextComponent begin1Text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Great, now you are ready to begin the SPEED task.

        As a reminder, you should press "g" if the string of letters on the screen is a real word and "h" if it is not a word. Importantly, if the string of letters on the screen is an animal, you should press "q".

        You're primary goal is to press "q" if you see an animal.

        Press "q" to continue.
    KeyboardComponent begin1Key
      allowedKeys = 'q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LDTbegin2
    TextComponent begin2Text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        The remaining SPEED task is somewhat taxing. Please do your best to stay focused throughout.

        Press ENTER to start the SPEED task.
    KeyboardComponent begin2Key
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LDTbegin3
    TextComponent begin3Text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to start the SPEED task.
      wrapWidth = 1.2
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    KeyboardComponent begin3Key
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine countdown
    TextComponent five
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 5
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    TextComponent four
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = 4
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    TextComponent three
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent two
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1
      text = 2
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    TextComponent one
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1
      text = 1
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  Routine SVT
    CodeComponent SVTcode
      Code Type = Auto->JS
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      Begin Routine:
        opt1 = '1. ' + str(SVTopt1)
        opt2 = '2. ' + str(SVTopt2)
        opt3 = '3. ' + str(SVTopt3)
        opt4 = '4. ' + str(SVTopt4)
    TextComponent SV_cue
      color = black
      font = ARIAL
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $SVTcue
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    TextComponent option1Text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $opt1
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    TextComponent option2Text
      color = black
      letterHeight = 0.05
      pos = (0, -0.055)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $opt2
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    TextComponent option3Text
      color = black
      letterHeight = 0.05
      pos = (0, -.11)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $opt3
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    TextComponent option4Text
      color = black
      letterHeight = 0.05
      pos = (0, -0.16)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $opt4
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    KeyboardComponent svtKey
      allowedKeys = '1','2','3','4'
      correctAns = $SVTcorrResp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine SVTinst
    TextComponent SVTinstText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Before continuing to the SPEED task, you will complete a short vocabulary task. During the vocabulary task, a word will be presented in capital letters at the top of the screen. Below it, there will be a set of four words with numbers next to them. Your job is to select which of the four words has the same meaning as the word in capital letters at the top.


        Press SPACE to start the vocabulary task.
    KeyboardComponent SVkey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine demoInst
    TextComponent formInstText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Before concluding the experiment, we would like you to answer a few questions about yourself.


        Press SPACE to begin the questions.
    KeyboardComponent formInstKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine finish
    TextComponent finishText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        You're now done with the experiment. Please get the experimenter for further instructions.

        Thank you for your participation!
  Routine demoRace
    CodeComponent storeResp
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('race',raceList[demoRace_loop.thisN])
        thisExp.addData('raceResp', raceResp.keys)
    TextComponent raceText
      color = black
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $race
      wrapWidth = 1.2
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    TextComponent raceOpts
      color = black
      letterHeight = 0.05
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        If yes, press "y".
        If no, press "n".

        Press "x" if you prefer not to answer.
    KeyboardComponent raceResp
      allowedKeys = 'y','n','x'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent raceEnd
      Code Type = Auto->JS
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      End Routine:
        event.clearEvents('keyboard')
  Routine demoRace_init
    CodeComponent raceCode
      Code Type = Auto->JS
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      Begin Routine:
        raceList = ['American Indian or Alaska Native', 'Asian','Black or African American','Native Hawaiian or other Pacific Islander','White']

        race = 'Are you ' + str(raceList[demoRace_loop.thisN]) + '?'
  Routine PMinst1
    PolygonComponent PMinstBackground
      fillColor = blue
      lineColor = blue
      saveStartStop = False
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent pmInst1Text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        --- PLEASE READ CAREFULLY ---

        In this experiment, we are interested in your ability to perform an action at a given point in the future. Therefore, during the SPEED task, we would like you to perform a special action whenever the word on the screen is an animal. Here are two examples:

        cheetah            hamster

        Whenever the word on the screen is an animal, we would like you to press the "q" key. If you forget to press "q" right away, you may do so as soon as you remember.

        Press "q" to proceed.
    KeyboardComponent PMinst1Key
      allowedKeys = 'q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PMinst2
    TextComponent PMinst2Text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Although you will still be making word and nonword judgements, your primary task is to press "q" when you see an animal appear on the screen.

        Press ENTER to continue.
    KeyboardComponent PMinst2Key
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LDTfix500
    PolygonComponent LDTfix
      fillColor = black
      lineColor = black
      lineWidth = .025
      pos [set every repeat] = loc
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine pracfix500
    PolygonComponent fixcross
      fillColor = black
      lineColor = black
      lineWidth = .01
      pos [set every repeat] = pStimLoc
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine demoPsych
    CodeComponent psychCode
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("psych", psychKey.keys.replace('num_', ''))
    TextComponent psychText
      color = Black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Have you been diagnosed with one of the following neurological or psychiatric disorders?

        1. ADHD
        2. Bipolar Disorder
        3. Depression
        4. Anxiety
        5. Other
        6. More than one
        7. I have not been diagnosed with a neurological or psychiatric disorder
    KeyboardComponent psychKey
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pracTrialinit
    CodeComponent pracTrialCode
      Code Type = Auto->JS
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      Begin Routine:
        pStim = this_pracS[pracTrial.thisN]
        pWordType = this_pracWT[pracTrial.thisN]
        pCorrKey = this_pracCK[pracTrial.thisN]
        pLoc = this_pracStimLoc[pracTrial.thisN]
        if pLoc == 'upper':
            pStimLoc = [0,0.25]
        else:
            pStimLoc = [0,-0.25]

        thisExp.addData('stim', pStim)
        thisExp.addData('word_type', pWordType)
        thisExp.addData('corr_key', pCorrKey)
        thisExp.addData('stim_location', pLoc)
  Routine pracBlockinit
    CodeComponent pracBlockCode
      Code Type = Auto->JS
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      Begin Routine:
        nCorr = 0

        if subNum %4 == 0:
            pracSL = [['upper']*int(nPracTrials)] + [['lower']*int(nPracTrials)]
        elif subNum %4 == 1:
            pracSL = [['lower']*int(nPracTrials)] + [['upper']*int(nPracTrials)]
        elif subNum %4 == 2:
            pracSL = [['upper']*int(nPracTrials)] + [['lower']*int(nPracTrials)]
        elif subNum %4 == 3:
            pracSL = [['lower']*int(nPracTrials)] + [['upper']*int(nPracTrials)]

        this_pracS = pracStim[pracBlocks.thisN]
        this_pracWT = pracWordType[pracBlocks.thisN]
        this_pracCK = pracCorrKey[pracBlocks.thisN]
        this_pracStimLoc = pracSL[pracBlocks.thisN]
  Routine pracCountdown
    CodeComponent pracCountCode
      Code Type = Auto->JS
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      Begin Routine:
        if (int(pracBlocks.thisN) + 1) == nPracBlock:
            continueRoutine = False
        else:
            continueRoutine = True
    TextComponent fiveText
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 5
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    TextComponent fourText
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = 4
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    TextComponent threeText
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
      text = 3
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    TextComponent twoText
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent oneText
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 1
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  Routine LDTcountdown
    CodeComponent countdownCode
      Code Type = Auto->JS
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      Begin Routine:
        if (int(LDT_block.thisN) + 1) == nBlocks:
            continueRoutine = False
        else:
            continueRoutine = True
    TextComponent countdown5Text
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 5
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    TextComponent countdown4text
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = 4
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    TextComponent countdown3Text
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
      text = 3
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    TextComponent countdown2Text
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent countdown1Text
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 1
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  Routine LDTInst5
    TextComponent LDTInst5Text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Try a few for practice. In the practice trials, you will be given feedback on the accuracy and speed of your response. Try to speed up your response as much as possible without significantly sacrificing accuracy. It is normal to misjudge a few of the words.


        Press ENTER to practice the SPEED task.
    KeyboardComponent LDTInst5Key
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LDTInst4
  Routine LDTunderstand_2
  Routine LDTcheck
    CodeComponent LDTunderCode
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("LDTunderstand", LDTcheckKey.keys)
        if LDTcheckKey.keys == 'y':
            LDTunderstand.finished = True
        elif LDTcheckKey.keys == 'Y':
            LDTunderstand.finished = True
    TextComponent LDTcheckText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Do you understand these instructions?

        If yes, press "y".
        If no, press "n".
    KeyboardComponent LDTcheckKey
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine LDTreread
    CodeComponent LDTrereadCode
      Code Type = Auto->JS
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      Begin Routine:
        if LDTunderstand.thisN == 0:
            continueRoutine = False
    TextComponent LDTrereadText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please re-read through the instructions.

        Press ENTER to continue.
    KeyboardComponent LDTrereadKey
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PMcheck
    CodeComponent PMcheckCode
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("PMunderstand", PMcheckKey.keys)
        if PMcheckKey.keys == 'y':
            PMunderstand.finished = True
        elif PMcheckKey.keys == 'Y':
            PMunderstand.finished = True
        event.clearEvents('keyboard')
    TextComponent PMcheckText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Do you understand these instructions?

        If yes, press "y".
        If no, press "n".
    KeyboardComponent PMcheckKey
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PMreread
    CodeComponent PMrereadCode
      Code Type = Auto->JS
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      Begin Routine:
        if PMunderstand.thisN == 0:
            continueRoutine = False
    TextComponent PMrereadtext
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please re-read the instructions.

        Press ENTER to continue.
    KeyboardComponent PMrereadKey
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PMintention
    TextComponent intentionText
      color = black
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What is the button you should press when you see that word type?
      wrapWidth = 1.2
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    TextboxComponent intentionTextbox
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent intentionNextKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent intentionNextText
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to submit your response.
      wrapWidth = 1.2
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  Routine PMcue
    TextComponent cueText
      color = black
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What is the type of word you should be looking for?
      wrapWidth = 1.2
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    TextboxComponent cueTextbox
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent cueNextKey
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent cueNextText
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to submit your response.
      wrapWidth = 1.2
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  Routine postExpQ1
    CodeComponent Q1Code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("postQ1", Q1Key.keys)

        event.clearEvents('keyboard')
    TextComponent Q1Text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Do you remember being asked to press a specific button when you saw a type of word on the screen?

        If yes, press "y".
        If no, press "n"
    KeyboardComponent Q1Key
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine postExp
  Routine postExpInst
    TextComponent postInstText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Good job! Now, we would like you to answer a few questions about your experience during the task.

        Press ENTER to continue.
    KeyboardComponent postInstKey
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pracBreak
    CodeComponent pracBreakCode
      Code Type = Auto->JS
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      Begin Routine:
        if (int(pracBlocks.thisN) + 1) == nPracBlock:
            continueRoutine = False
        else:
            continueRoutine = True
    TextComponent pracBreakText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Break!

        The next segment will begin in 5 seconds.
  Routine demoPsych_2
  Routine SVT2Inst
    TextComponent SVT2Text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Great! You are finished with the SPEED task. You will complete a short vocabulary task. A word will be presented in capital letters at the top of the screen.  Below it, there will be a set of four words with numbers next to them. Your job is to select which of the four words has the same meaning as the word in capital letters at the top.


        Press SPACE to start the vocabulary task.
    KeyboardComponent SVT2Key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine demo1Inst
    TextComponent demo1InstText
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Before we get started with the task, we would like you to answer a few questions about yourself.

        Press ENTER to continue.
    KeyboardComponent demoInstTextKey
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine postExpQ4
    CodeComponent Q4code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("Q4", Q4Key.keys.replace('num_', ''))
    TextComponent Q4Text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        An animal word appeared in 20 of the segments.  How many times do you think you pressed "Q" in response to the an animal word? Please select a response from the options below.

        0. Never
        1. 1-5 times
        2. 6-10 times
        3. 11-15 times
        4. 16-20 times
    KeyboardComponent Q4Key
      allowedKeys = '0','1','2','3','4'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine posExpQ5
    CodeComponent Q5code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("Q5", Q5Key.keys.replace('num_', ''))
    TextComponent Q5Text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        If you think you did not press "Q" in response to an animal word very often, why do you think that is? Please select an option from below.

        1. I did not see any animal words
        2. I forgot the word type I was supposed to look for
        3. I forgot the key I was supposed to press
        4. I responded to the animal words often
    KeyboardComponent Q5Key
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine postExpQ6
    TextComponent Q6Text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Did you notice that the animal words appeared more often when the strings of letters were presented in a certain location?

        If yes, press "y".
        If no, press "n".
    KeyboardComponent Q6Key
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine postExpQ7
    CodeComponent Q7Code
      Code Type = Auto->JS
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      Begin Routine:
        if Q6Key.keys == 'n':
            continueRoutine = False
      End Routine:
        if hDemandLoc == 'upper' and Q7Key.keys == 'u':
            thisExp.addData('postQ7_correct', 1)
        elif hDemandLoc == 'lower' and Q7Key.keys == 'l':
            thisExp.addData('postQ7_correct', 1)
        else:
            thisExp.addData('postQ7_correct', 0)

        thisExp.addData("postQ7", Q7Key.keys)
    TextComponent Q7Text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Did the animal words appear more often the upper or lower location on the screen?

        Press "u" for upper.
        Press "l" for lower.
    KeyboardComponent Q7Key
      allowedKeys = 'u','l','x'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PMinst2_2
  Routine postExpQ8
    TextComponent Q8Text
      color = black
      letterHeight = 0.05
      pos = (0, 0.18)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Did you have any questions about the task or task instructions that you wish you could have asked the experimenter? If yes, please explain below. If no, leave blank.
      wrapWidth = 1.2
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    TextboxComponent Q8Textbox
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent Q8Next
      color = black
      letterHeight = 0.05
      pos = (0, -0.175)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent Q8Key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine postExpQ2
    TextComponent Q2Text
      color = black
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What was the type of word you were supposed to look for? Please type your answer below.
      wrapWidth = 1.2
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    TextboxComponent Q2Textbox
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent Q2Next
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER to submit your response.
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    KeyboardComponent Q2Key
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine postExpQ3
    TextComponent Q3Text
      color = black
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What was the button you were supposed to press when you saw that word type? Please type your answer below.
      wrapWidth = 1.2
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    TextboxComponent Q3Textbox
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent Q3Next
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to submit your response.
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    KeyboardComponent Q3Key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine PMCheck
    CodeComponent checkCode
      Code Type = Auto->JS
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      Begin Routine:
        if this_blockDesc == 'HiDemTar' or this_blockDesc == 'LoDemTar':
            if blockPM == 1:
                thisExp.addData('PM_accuracy', 1)
            else:
                thisExp.addData('PM_accuracy', 0)
        else:
            thisExp.addData('PM_accuracy', 'NA')
Flow
  Routine init
  Routine welcome
  Routine demo1Inst
  Routine demoAge
  Routine demoGender
  LoopInitiator demoRace_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine demoRace_init
    Routine demoRace
  LoopTerminator demoRace_loop
  LoopInitiator LDTunderstand loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine LDTreread
    Routine LDTInst1
    Routine LDTInst2
    Routine LDTInst3
    Routine LDTcheck
  LoopTerminator LDTunderstand
  Routine LDTInst5
  Routine countdown
  LoopInitiator pracBlocks loopType="TrialHandler"
    loopType = random
    nReps = nPracBlock
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    Routine pracBlockinit
    LoopInitiator pracTrial loopType="TrialHandler"
      loopType = random
      nReps = nPracTrials
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      Routine pracTrialinit
      Routine pracfix500
      Routine LDTprac
      Routine pracFeedback
    LoopTerminator pracTrial
    Routine pracBreak
    Routine pracCountdown
  LoopTerminator pracBlocks
  LoopInitiator PMunderstand loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine PMreread
    Routine PMinst1
    Routine PMinst2
    Routine PMcheck
  LoopTerminator PMunderstand
  Routine PMcue
  Routine PMintention
  Routine LDTbegin1
  Routine LDTbegin2
  Routine countdown
  LoopInitiator LDT_block loopType="TrialHandler"
    loopType = sequential
    nReps = nBlocks
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    Routine block_init
    LoopInitiator LDT_trial loopType="TrialHandler"
      loopType = sequential
      nReps = ntrials
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      Routine trial_init
      Routine LDTfix500
      Routine LDT
      Routine blank500
    LoopTerminator LDT_trial
    Routine PMCheck
    Routine block_break
    Routine LDTcountdown
  LoopTerminator LDT_block
  Routine postExpInst
  Routine postExpQ1
  Routine postExpQ2
  Routine postExpQ3
  Routine postExpQ4
  Routine posExpQ5
  Routine postExpQ6
  Routine postExpQ7
  Routine postExpQ8
  Routine demoInst
  Routine demoEducation
  Routine demoMedication
  Routine demoHealth
  Routine demoHealthLimit
  Routine demoPsych
  Routine finish
